PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SRT
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = red
      lineColor = red
      pos [set every repeat] = position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'd','f','j','k'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine welcome
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    TextComponent WT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 5
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      text:
        欢迎您来带著名的SRT实验，
        接下来我们会给您展示一个会移动的红色圆点，
        其只会出现在从左到右的四个位置，依次对应着d,f,j,k
        需要您尽可能快的判断其位置，并按下对应的按钮，现在按下任意键，
        我们会为您呈现四个位置与对应的按钮
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $order
    PolygonComponent EX
      fillColor = red
      lineColor = red
      pos [set every repeat] = position
      shape = circle
      size = [0.05,0.05]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine begin
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 实验将在5s后正式开始，请将手指放在 d f j k 上做好准备
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 感谢您参加我们的实验，本次实验将在10s后自动退出
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Flow
  Routine welcome
  LoopInitiator exa loopType="TrialHandler"
    conditionsFile = EXAMPLE.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'order': 1, 'position': (-15, 0), 'corr_ans': 'd'},
      {'order': 2, 'position': (5, 0), 'corr_ans': 'f'},
      {'order': 3, 'position': (5, 0), 'corr_ans': 'j'},
      {'order': 4, 'position': (15, 0), 'corr_ans': 'k'}]
    Routine example
  LoopTerminator exa
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = the_condition.xlsx
    loopType = sequential
    nReps = 10
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    conditions:
      [{'order': 4, 'position': (15, 0), 'corr_ans': 'k'},
      {'order': 1, 'position': (-15, 0), 'corr_ans': 'd'},
      {'order': 3, 'position': (5, 0), 'corr_ans': 'j'},
      {'order': 2, 'position': (-5, 0), 'corr_ans': 'f'},
      {'order': 3, 'position': (5, 0), 'corr_ans': 'j'},
      {'order': 4, 'position': (15, 0), 'corr_ans': 'k'},
      {'order': 1, 'position': (-15, 0), 'corr_ans': 'd'},
      {'order': 2, 'position': (5, 0), 'corr_ans': 'f'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
